---
API: 2
OpenSesame: 3.0.7
Platform: posix
---
set width 1200
set uniform_coordinates no
set transparent_variables no
set title "MouseTrack True or False"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sampler_backend legacy
set mouse_backend legacy
set keyboard_backend legacy
set height 800
set foreground black
set font_size 20
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/tom/github/mousetrackingOperatorPreviewEffect/procedure"
set description "A simple template for the mouse-tracking paradigm"
set custom_cursor no
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background white

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run setup_script always
	run trial_loop always

define logger logger
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log no
	log height
	log subject_nr
	log width
	log response
	log accuracy
	log rt
	log xTrajectory
	log yTrajectory
	log tTrajectory
	log count_trial_sequence
	log truth
	log stimulus

define inline_script question_script
	set description "Executes Python code"
	___run__
	# Draw Start Button
	my_canvas.clear()
	my_canvas.image(start_button, True, mx, (2*my) - half_start_h)
	my_canvas.image(yes_button, False, 0, 0)
	my_canvas.image(no_button, False, 2*mx - response_w, 0)
	my_canvas.show()
	my_mouse.show_cursor(show=True)
	
	#Wait for click on start button
	while 1:
		button, position, timestamp = my_mouse.get_click()
		x, y = position
		if x > mx-half_start_w and x < mx+half_start_w and y > (2*my) - 2*half_start_h:
			my_canvas.clear()
			break
	
	# Hide the mouse
	my_mouse.show_cursor(show=False)
	# Fixation
	tick = fixation_length / 3
	my_canvas.clear()
	my_canvas.image(yes_button, False, 0, 0)
	my_canvas.image(no_button, False, 2*mx - response_w, 0)
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.text('+')
	my_canvas.image(yes_button, False, 0, 0)
	my_canvas.image(no_button, False, 2*mx - response_w, 0)
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.clear()
	my_canvas.image(yes_button, False, 0, 0)
	my_canvas.image(no_button, False, 2*mx - response_w, 0)
	my_canvas.show()
	exp.sleep(tick)
	
	# Show the stimuli
	my_canvas.clear()
	my_canvas.image(exp.get_file('stimuli/{0}'.format(stimulus)),True)
	my_canvas.image(yes_button, False, 0, 0)
	my_canvas.image(no_button, False, 2*mx - response_w, 0)
	my_canvas.show()
	# Show the mouse, and move it to the starting point
	my_mouse.show_cursor(show=True)
	my_mouse.set_pos(pos=(mx, (2*my)-half_start_h))
	
	# The actual mouse tracking
	t0 = start = exp.time()
	t1 = t0 + sample_rate
	resp = 0
	timed_out = False
	slow_start = False
	while 1:
		position, timestamp = my_mouse.get_pos()
		if my_mouse.get_pressed()[0]: # A click
			if x < response_w and y < response_h:
				# Clicked response 1
				rt = timestamp - start
				resp = 1
				print 'response 1'
				break
			elif x > (2*mx) - response_w and y < response_h:
				# Clicked response 2
				rt = timestamp - start
				resp = 2
				print 'response 2'
				break
		if timestamp > t1:
			# It's time to record the mouse position
			t1 += sample_rate
			t = timestamp - start
			x, y = position
			xList.append(x)
			yList.append(y)
			tList.append(t)
			if t > max_response_time:
				# Out of time, record a null response.
				timed_out = True
				resp = -1
				rt = None
				print 'Timeout'
				break
	
	# Let's figure out if the response was correct
	if truth == 'true':
		correct_response = 1
	else:
		correct_response = 2
	accuracy = int(resp == correct_response)
	
	
	# Show a message if wrong answer (optional)
	if (accuracy == 0 and not timed_out):
		my_canvas.clear()
		my_canvas.text('X')
		my_canvas.show()
		exp.sleep(1000)
	
	# Show a message if the trial has timed out without a response
	if timed_out:
		my_canvas.clear()
		my_canvas.text(timeout_message)
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	
	# Figure out if the mouse had left the start button by max_init_time
	for i in range(len(yList)):
		y = yList[i]
		if y < ((2*my) - (2*half_start_h)):
			init_step = i # The sample where y left the button
			break
	init_time = tList[init_step] # 	The time of that sample
	slow_start = int(init_time > max_init_time)
	
	
	
	# Show a message if the trial has timed out without a response
	if (slow_start and not timed_out):
		my_canvas.clear()
		my_canvas.text(slow_start_message)
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	
	
	# Standard Logging (the probe and code variables are taken care of automatically)
	self.experiment.set("response", resp)
	self.experiment.set("accuracy", accuracy)
	self.experiment.set("rt", rt)
	self.experiment.set("xTrajectory", str(xList))
	self.experiment.set("yTrajectory", str(yList))
	self.experiment.set("tTrajectory", str(tList))
	__end__
	___prepare__
	# Constants
	max_response_time = 3000
	fixation_length = 900
	error_message_duration = 2000
	max_init_time = 800
	sample_rate = 30
	
	# Images
	start_button = exp.get_file('materials/start.png')
	yes_button = exp.get_file('materials/yes.png')
	no_button = exp.get_file('materials/no.png')
	
	# Text
	timeout_message = "Too slow!\n\
	Try to respond more quickly.\n\
	Press any key to continue."
	slow_start_message = "\
	Please try to move the mouse as soon\n\
	as you see the target, even if you're not\n\
	sure of your response yet\n\
	Press any key to continue."
	error_message = "<span color='red'>X</span>"
	# Turn our OpenSesame variables into plain Python ones
	stimulus = exp.get('stimulus')
	truth = exp.get('truth')
	
	# Some dimensions
	# Our start button is 80x80 pixels.
	# Change these values if using a different sized image.
	half_start_w = 40
	half_start_h = 40
	# Likewise for the response images
	response_w = 256
	response_h = 157
	# Get the size of the screen
	mx = my_canvas.xcenter()
	my = my_canvas.ycenter()
	
	# Some empty lists for recording mouse data
	xList, yList, tList = [], [], []
	__end__

define inline_script setup_script
	set description "Executes Python code"
	___run__
	# Create our input and output routines
	from openexp.mouse import mouse
	from openexp.keyboard import keyboard
	from openexp.canvas import canvas
	my_mouse = mouse(exp, visible=True)
	my_keyboard = keyboard(exp)
	my_canvas = canvas(exp)
	# Declare them as global, so we can use them later on.
	global my_mouse, my_keyboard, my_canvas
	__end__
	set _prepare ""

define loop trial_loop
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 10
	set column_order "stimulus;truth;weight"
	set break_if never
	setcycle 0 stimulus "2_7_add_FI.jpg"
	setcycle 0 truth "false"
	setcycle 0 weight "1"
	setcycle 1 stimulus "2_7_add_FNI.jpg"
	setcycle 1 truth "false"
	setcycle 1 weight "1"
	setcycle 2 stimulus "2_7_add_true.jpg"
	setcycle 2 truth "true"
	setcycle 2 weight "2"
	setcycle 3 stimulus "2_7_add_true.jpg"
	setcycle 3 truth "true"
	setcycle 3 weight "2"
	setcycle 4 stimulus "2_7_mult_FI.jpg"
	setcycle 4 truth "false"
	setcycle 4 weight "1"
	setcycle 5 stimulus "2_7_mult_FNI.jpg"
	setcycle 5 truth "false"
	setcycle 5 weight "1"
	setcycle 6 stimulus "2_7_mult_true.jpg"
	setcycle 6 truth "true"
	setcycle 6 weight "2"
	setcycle 7 stimulus "2_7_mult_true.jpg"
	setcycle 7 truth "true"
	setcycle 7 weight "2"
	setcycle 8 stimulus "3_6_add_FI.jpg"
	setcycle 8 truth "false"
	setcycle 8 weight "1"
	setcycle 9 stimulus "3_6_add_FNI.jpg"
	setcycle 9 truth "false"
	setcycle 9 weight "1"
	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run question_script always
	run logger always

